s:Sim/PlanLabel = "matRad_plan"
s:Sim/ScoreLabel = "score_matRad_plan_field1_run1"

i:Ma/Verbosity = 0
i:Ts/TrackingVerbosity = 0
i:Ts/EventVerbosity = 0
i:Ts/RunVerbosity = 0
b:Ts/ShowCPUTime = "True"
i:Tf/Verbosity = 0
i:Ts/MaxInterruptedHistories = 1000
Ts/NumberOfThreads = 0
i:Ts/ShowHistoryCountAtInterval = 1000000

s:Sim/DoseScorerOutputType = "binary"
sv:Sim/DoseScorerReport = 1 "Sum"

i:Ts/Seed = 1
includeFile = ./beamSetup_matRad_plan_field1.txt
# s:Sim/DoseScorerOutputType = "bin"
# sv:Sim/DoseScorerReport = 5 "Count_In_Bin" "Sum" "Mean" "Standard_deviation" "Variance"
# sv:Sim/DoseScorerReport = 2 "Sum" "Standard_deviation"
# sv:Sc/Patient/Tally_DoseToMedium/OnlyIncludeParticlesNamed = 1 "Proton"
# b:Ts/DumpNonDefaultParameters = "False"
# b:Ts/DumpNonDefaultParameters = "True"
s:Sc/Patient/Tally_DoseToMedium/Quantity = "DoseToMedium"
s:Sc/Patient/Tally_DoseToMedium/OutputType = Sim/DoseScorerOutputType # "csv" "binary" "Root" "Xml" or "DICOM"
s:Sc/Patient/Tally_DoseToMedium/Component = "Patient"
sv:Sc/Patient/Tally_DoseToMedium/Report = Sim/DoseScorerReport
s:Sc/Patient/Tally_DoseToMedium/IfOutputFileAlreadyExists = "Overwrite" # "Exit" "Overwrite" or "Increment"
b:Sc/Patient/Tally_DoseToMedium/OutputToConsole = "False"
s:Sc/Patient/Tally_DoseToMedium/OutputFile = Sim/ScoreLabel + "_physicalDose"
